# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows.
name: HP 8672A Signal Generator

# The version string should be updated whenever changes are made to this
# configuration file.
version: 1.0

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: HP_8672A_SignalGenerator

# Default interface.
interface: GPIB
address: 17

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is
# a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False). 
# Default is False.
reset: False

# Time (in seconds) before the timing out while waiting for
# an instrument response. Default is 5.
timeout: 5

# Query instrument errors (True or False). If True, every command sent
# to the device will be followed by an error query. This is useful when
# testing new setups, but may degrade performance by slowing down
# the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all
# errors).
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages.
error_cmd: 

# Initialization commands are sent to the instrument when starting
# the driver *RST will reset the device, *CLS clears the interface.
init: 

# Final commands sent to the instrument when closing the driver.
final:

[Model and options]

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
[Frequency]
unit: Hz
datatype: DOUBLE
permission: WRITE
def_value: 3E9

[Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: O2
cmd_def_2: O3
set_cmd: <*>
permission: WRITE
def_value: Off