# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows.
name: Math

# The version string should be updated whenever changes are made to this
# configuration file.
version: 1.0

# Default interface.
interface: Other
address: 1

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: Math

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
[Input vector]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
show_in_measurement_dlg: True

[First value]
datatype: COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Last value]
datatype: COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Maximum]
datatype: DOUBLE
permission: READ
unit: V
show_in_measurement_dlg: True

[Minimum]
datatype: DOUBLE
permission: READ
unit: V
show_in_measurement_dlg: True

[Average]
datatype: COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Median]
datatype: DOUBLE
permission: READ
unit: V
show_in_measurement_dlg: True

[Difference]
datatype: COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Ratio]
datatype: COMPLEX
permission: READ
unit:
show_in_measurement_dlg: True

[Pairwise difference]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Pairwise ratio]
datatype: VECTOR_COMPLEX
permission: READ
unit:
show_in_measurement_dlg: True