# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Simon's Multi-Qubit Pulse Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: MultiQubit_PulseGenerator

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True


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
[Sequence]
datatype: COMBO
combo_def_1: Rabi
combo_def_2: CP/CPMG
combo_def_3: Pulse train
combo_def_4: C-phase Pulses
combo_def_5: C-phase Echo
combo_def_6: 1-QB Randomized Benchmarking
combo_def_7: 2-QB Randomized Benchmarking
combo_def_8: Custom
group: Sequence
section: Sequence
show_in_measurement_dlg: True

[Custom Python file]
datatype: PATH
tooltip: Python file with custom Sequence class. The class must be named "CustomSequence"
state_quant: Sequence
state_value_1: Custom
group: Sequence
section: Sequence


[Number of qubits]
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
def_value: Two
group: Sequence
section: Sequence

[Pulse period, 1-QB]
datatype: DOUBLE
unit: s
def_value: 30E-9
low_lim: 0
group: Sequence
section: Sequence
show_in_measurement_dlg: True

[Pulse period, 2-QB]
datatype: DOUBLE
unit: s
def_value: 100E-9
low_lim: 0
group: Sequence
section: Sequence
show_in_measurement_dlg: True

[Local XY control]
datatype: BOOLEAN
def_value: 1
group: Sequence
section: Sequence

[Sample rate]
datatype: DOUBLE
def_value: 1.2E9
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Number of points]
datatype: DOUBLE
def_value: 240E3
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[First pulse delay]
datatype: DOUBLE
unit: s
def_value: 100E-9
group: Waveform
section: Waveform

[Trim waveform to sequence]
datatype: BOOLEAN
def_value: 1
group: Waveform
section: Waveform

[Trim both start and end]
datatype: BOOLEAN
def_value: 0
state_quant: Trim waveform to sequence
state_value_1: 1
group: Waveform
section: Waveform

[Align pulses to end of waveform]
datatype: BOOLEAN
def_value: 0
group: Waveform
section: Waveform

[Uniform pulse ampiltude for all qubits]
datatype: BOOLEAN
tooltip: If True, the amplitude of pulse #1 will be used for all qubits
def_value: 1
state_quant: Sequence
state_value_1: Rabi
group: Rabi
section: Sequence

[# of pulses]
datatype: DOUBLE
def_value: 1
low_lim: 0
state_quant: Sequence
state_value_1: Pulse train
group: Pulse train
section: Sequence

[# of pulses, CZgates]
label: # of pulses
datatype: DOUBLE
def_value: 1
low_lim: 1
state_quant: Sequence
state_value_1: C-phase Pulses
group: C-phase Pulses
section: Sequence

[Alternate pulse direction]
datatype: BOOLEAN
def_value: False
state_quant: Sequence
state_value_1: Pulse train
group: Pulse train
section: Sequence

[# of pi pulses]
datatype: DOUBLE
tooltip: Number of refocusing pulses. Set to -1 for generating pulse sequences for T1 experiments
def_value: 1
low_lim: -1
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Sequence duration]
datatype: DOUBLE
unit: s
def_value: 1E-6
low_lim: 0
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Add pi pulses to Q]
datatype: BOOLEAN
def_value: True
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Edge-to-edge pulses]
datatype: BOOLEAN
def_value: True
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Qubits to Benchmark]
datatype: COMBO
combo_def_1: 1-2
combo_def_2: 2-3
combo_def_3: 3-4
combo_def_4: 4-5
combo_def_5: 5-6
combo_def_6: 6-7
combo_def_7: 7-8
combo_def_8: 8-9
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Number of Cliffords]
datatype: DOUBLE
def_value: 17
low_lim: 1
group: 1QB Randomized Benchmarking
section: Sequence
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
show_in_measurement_dlg: True

[Randomize]
datatype: DOUBLE
def_value: 0
group: 1QB Randomized Benchmarking
tooltip: Randomize gate sequence only if "Randomize" value changes or "Number of Cliffords" changes
section: Sequence
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
show_in_measurement_dlg: True

[Interleave 1-QB Gate]
datatype: BOOLEAN
def_value: 0
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleaved 1-QB Gate]
datatype: COMBO
combo_def_1: 1-QB Gate,X,+Pi
combo_def_2: 1-QB Gate,X,-Pi
combo_def_3: 1-QB Gate,X,+Pi_over2
combo_def_4: 1-QB Gate,X,-Pi_over2
combo_def_5: 1-QB Gate,Y,+Pi
combo_def_6: 1-QB Gate,Y,-Pi
combo_def_7: 1-QB Gate,Y,+Pi_over2
combo_def_8: 1-QB Gate,Y,-Pi_over2
state_quant: Interleave 1-QB Gate
state_value_1: 1
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleave 2-QB Gate]
datatype: BOOLEAN
def_value: 0
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleaved 2-QB Gate]
datatype: COMBO
combo_def_1: 2-QB Gate,CZ
state_quant: Interleave 2-QB Gate
state_value_1: 1
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Parameter #1]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #2]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #3]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #4]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #5]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #6]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #7]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #8]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #9]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence
[Parameter #10]
datatype: DOUBLE
def_value: 0.0
state_quant: Sequence
state_value_1: Custom
group: Custom
section: Sequence

# Pulses
#######################
[Pulse type]
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
group: Pulse settings
section: 1-QB gates

[Truncation range]
datatype: DOUBLE
def_value: 3
state_quant: Pulse type
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates

[Start at zero]
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates

[Use DRAG]
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates

[Uniform pulse shape]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates

[Width]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse settings
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 1
show_in_measurement_dlg: True

[Plateau]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse settings
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 1
show_in_measurement_dlg: True


# Actual pulses
####################
[Amplitude #1]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #1
section: 1-QB gates
show_in_measurement_dlg: True
[Width #1]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #1]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #1]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #1
section: 1-QB gates
[DRAG scaling #1]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #1
section: 1-QB gates

# Actual pulses
####################
[Amplitude #2]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #2
section: 1-QB gates
show_in_measurement_dlg: True
[Width #2]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #2]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #2]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #2
section: 1-QB gates
[DRAG scaling #2]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #2
section: 1-QB gates

# Actual pulses
####################
[Amplitude #3]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #3
section: 1-QB gates
show_in_measurement_dlg: True
[Width #3]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #3]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #3]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #3
section: 1-QB gates
[DRAG scaling #3]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #3
section: 1-QB gates

# Actual pulses
####################
[Amplitude #4]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #4
section: 1-QB gates
show_in_measurement_dlg: True
[Width #4]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #4]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #4]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #4
section: 1-QB gates
[DRAG scaling #4]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #4
section: 1-QB gates


# Actual pulses
####################
[Amplitude #5]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #5
section: 1-QB gates
show_in_measurement_dlg: True
[Width #5]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #5
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #5]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #5
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #5]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #5
section: 1-QB gates
[DRAG scaling #5]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #5
section: 1-QB gates


# Actual pulses
####################
[Amplitude #6]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #6
section: 1-QB gates
show_in_measurement_dlg: True
[Width #6]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #6
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #6]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #6
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #6]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #6
section: 1-QB gates
[DRAG scaling #6]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #6
section: 1-QB gates

# Actual pulses
####################
[Amplitude #7]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #7
section: 1-QB gates
show_in_measurement_dlg: True
[Width #7]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #7
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #7]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #7
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #7]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #7
section: 1-QB gates
[DRAG scaling #7]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #7
section: 1-QB gates

# Actual pulses
####################
[Amplitude #8]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #8
section: 1-QB gates
show_in_measurement_dlg: True
[Width #8]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #8
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #8]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #8
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #8]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #8
section: 1-QB gates
[DRAG scaling #8]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #8
section: 1-QB gates

# Actual pulses
####################
[Amplitude #9]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #9
section: 1-QB gates
show_in_measurement_dlg: True
[Width #9]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #9
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Plateau #9]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #9
section: 1-QB gates
state_quant: Uniform pulse shape
state_value: 0
[Frequency #9]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #9
section: 1-QB gates
[DRAG scaling #9]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #9
section: 1-QB gates



# Pulses
#######################
[Pulse type, 2QB]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: CZ
def_value: CZ
group: 2-QB pulses
section: 2-QB gates

[Truncation range, 2QB]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, 2QB
state_value: Gaussian
group: 2-QB pulses
section: 2-QB gates

[Start at zero, 2QB]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, 2QB
state_value: Gaussian
group: 2-QB pulses
section: 2-QB gates

[Uniform 2QB pulses]
datatype: BOOLEAN
def_value: True
group: 2-QB pulses
section: 2-QB gates

[Width, 2QB]
label: Width
datatype: DOUBLE
unit: s
def_value: 50E-9
group: 2-QB pulses
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 1
show_in_measurement_dlg: True

[Plateau, 2QB]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulses
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 1
show_in_measurement_dlg: True

[Fourier terms, 2QB]
label: Fourier Terms
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
def_value: One
tooltip: Number of fourier terms used to define the pulseshape of the C-phase gate
group: 2-QB pulses
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value: CZ

# Parameters #12
####################
[Amplitude, 2QB #12]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #12]
label: Width
datatype: DOUBLE
unit: s
def_value: 50E-9
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #12]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #12]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #12]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
tooltip: Initial frequency splitting between the |11> state and the |02> state
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #12]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #12]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
tooltip: Coupling strength between |11> state and |02> state
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #12]
label: L1
datatype: DOUBLE
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #12]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #12]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #12]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #12
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #23
####################
[Amplitude, 2QB #23]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #23]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #23]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #23]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #23]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #23]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #23]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #23]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #23]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #23]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #23]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #23
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #34
####################
[Amplitude, 2QB #34]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #34]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #34]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #34]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #34]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #34]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #34]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #34]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #34]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #34]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #34]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #34
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #45
####################
[Amplitude, 2QB #45]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #45]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #45]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #45]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #45]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #45]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #45]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #45]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #45]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #45]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #45]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #45
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #56
####################
[Amplitude, 2QB #56]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #56]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #56]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #56]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #56]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #56]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #56]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #56]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #56]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #56]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #56]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #67
####################
[Amplitude, 2QB #67]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #67]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #67]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #67]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #67]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #67]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #67]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #67]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #67]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #67]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #67]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #78
####################
[Amplitude, 2QB #78]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #78]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #78]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #78]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #78]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #78]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #78]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #78]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #78]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #78]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #78]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #89
####################
[Amplitude, 2QB #89]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
show_in_measurement_dlg: True
[Width, 2QB #89]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[Plateau, 2QB #89]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0
[df/dV, 2QB #89]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 initial, 2QB #89]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[f11-f20 final, 2QB #89]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[Coupling, 2QB #89]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ
[L1, 2QB #89]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four
[L2, 2QB #89]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four
[L3, 2QB #89]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four
[L4, 2QB #89]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four


# State tomography
#######################
[Generate tomography pulse]
datatype: BOOLEAN
def_value: 0
group: State tomography
section: Tomography


# Predistortion
#######################
[Predistort waveforms]
datatype: BOOLEAN
def_value: 0
group: Predistortion
section: Predistortion

[Transfer function #1]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #2]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #3]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #4]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #5]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #6]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #7]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #8]
datatype: PATH
group: Predistortion
section: Predistortion

[Transfer function #9]
datatype: PATH
group: Predistortion
section: Predistortion

# Cross-talk
#######################
[Compensate cross-talk]
datatype: BOOLEAN
def_value: 0
group: Cross-talk
section: Cross-talk

[Cross-talk (CT) matrix]
datatype: PATH
group: Cross-talk
section: Cross-talk

[1-1 QB <--> Crosstalk matrix]
tooltip: One-to-one QB to Cross-talk matrix element correspondence
datatype: BOOLEAN
def_value: True
group: Cross-talk
section: Cross-talk

[CT-matrix element #1]
tooltip: Which QB/output corresponds to which element of the cross-talk matrix
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk

[CT-matrix element #2]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four
state_value_3: Three
state_value_4: Two

[CT-matrix element #3]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four
state_value_3: Three

[CT-matrix element #4]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four

[CT-matrix element #5]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five

# Readout
#######################
[Generate readout trig]
datatype: BOOLEAN
group: Readout trig
section: Readout
[Readout trig amplitude]
datatype: DOUBLE
def_value: 1.0
unit: V
group: Readout trig
section: Readout
[Readout trig duration]
datatype: DOUBLE
def_value: 20E-9
unit: s
group: Readout trig
section: Readout

[Generate readout waveform]
datatype: BOOLEAN
group: Readout
section: Readout
[Number of readout tones]
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Readout
section: Readout

[Uniform readout amplitude]
datatype: BOOLEAN
def_value: True
group: Readout
section: Readout
[Readout amplitude]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value: True
group: Readout
section: Readout
[Readout duration]
datatype: DOUBLE
def_value: 2E-6
unit: s
group: Readout
section: Readout
[Readout delay]
datatype: DOUBLE
unit: s
group: Readout
section: Readout
show_in_measurement_dlg: True
[Match main sequence waveform size]
datatype: BOOLEAN
tooltip: If checked, the readout waveform will have the same number of point as the main pulse waveforms
def_value: 0
group: Readout
section: Readout
[Readout frequency #1]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #1]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #2]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #2]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #3]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #3]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #4]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #4]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #5]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #5]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #6]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #6]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #7]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #7]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #8]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #8]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Readout frequency #9]
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout
section: Readout
[Readout amplitude #9]
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout
section: Readout
[Distribute readout phases]
datatype: BOOLEAN
tooltip: If checked, the readout tone phases will be distributed to avoid large peak-to-peak voltages
def_value: 0
group: Readout
section: Readout
[Readout I/Q ratio]
datatype: DOUBLE
def_value: 1.0
tooltip: Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
group: Readout
section: Readout
[Readout offset - I]
label: Offset I
tooltip: Readout mixer I offset
datatype: DOUBLE
def_value: 0
unit: V
group: Readout
section: Readout
[Readout offset - Q]
label: Offset Q
tooltip: Readout mixer Q offset
datatype: DOUBLE
def_value: 0
unit: V
group: Readout
section: Readout
[Readout IQ skew]
label: IQ skew
unit: deg
tooltip: Readout IQ mixer phase skew
datatype: DOUBLE
def_value: 0
group: Readout
section: Readout
[Predistort readout waveform]
datatype: BOOLEAN
tooltip: If checked, the readout waveform will be predistorted to increase the rise time
def_value: 0
group: Readout predistortion
section: Readout
[Resonator linewidth]
datatype: DOUBLE
def_value: 1E6
unit: Hz
tooltip: Measured resonator linewidth
state_quant: Predistort readout waveform
state_value: 1
group: Readout predistortion
section: Readout
[Target rise time]
datatype: DOUBLE
def_value: 50E-9
unit: s
tooltip: Intended resonator ring-up time
state_quant: Predistort readout waveform
state_value: 1
group: Readout predistortion
section: Readout


[Swap IQ]
datatype: BOOLEAN
group: Output
section: Output


# Gate settings
#######################
[Generate gate]
datatype: BOOLEAN
def_value: 1
group: Microwave gate switch
section: Output

[Uniform gate]
datatype: BOOLEAN
def_value: 0
state_quant: Generate gate
state_value: 1
group: Microwave gate switch
section: Output

[Gate delay]
datatype: DOUBLE
unit: s
def_value: -60E-9
low_lim: -1E-6
high_lim: 1E-6
group: Microwave gate switch
section: Output

[Gate overlap]
datatype: DOUBLE
unit: s
def_value: 20E-9
group: Microwave gate switch
section: Output

[Minimal gate time]
datatype: DOUBLE
unit: s
def_value: 20E-9
group: Microwave gate switch
section: Output

[Trace - I1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - Q1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - G1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - Z1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True


[Trace - I2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - Q2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - G2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - Z2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output

[Trace - I3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - Q3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - G3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - Z3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output

[Trace - I4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - Q4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - G4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - Z4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output

[Trace - I5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - Q5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - G5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - Z5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output

[Trace - I6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - Q6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - G6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - Z6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output

[Trace - I7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - Q7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - G7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - Z7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output

[Trace - I8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - Q8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - G8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - Z8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output

[Trace - I9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - Q9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - G9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - Z9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output

[Trace - Readout trig]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace - Readout I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace - Readout Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True


# Demodulation
#######################

[Demodulation - Skip]
label: Skip start
datatype: DOUBLE
def_value: 0.0
unit: s
section: Demodulation
group: Demodulation
[Demodulation - Length]
label: Length
datatype: DOUBLE
def_value: 1E-6
unit: s
section: Demodulation
group: Demodulation
[Demodulation - Frequency offset]
label: Frequency offset
datatype: DOUBLE
def_value: 0
unit: Hz
tooltip: Frequency difference between LO used for up- and downconversion, f_down - f_up
section: Demodulation
group: Demodulation
[Use phase reference signal]
datatype: BOOLEAN
def_value: True
section: Demodulation
group: Demodulation
[Demodulation - IQ]
datatype: BOOLEAN
def_value: False
section: Demodulation
group: Demodulation
[Demodulation - Input]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: False
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Input I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Input Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Reference]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True

[Voltage, QB1]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
section: Demodulation
show_in_measurement_dlg: True
[Voltage, QB2]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Demodulation
[Voltage, QB3]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Demodulation
[Voltage, QB4]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Demodulation
[Voltage, QB5]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Demodulation
[Voltage, QB6]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Demodulation
[Voltage, QB7]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Demodulation
[Voltage, QB8]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Demodulation
[Voltage, QB9]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
section: Demodulation
