# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows.
name: Readout Pulse

# The version string should be updated whenever changes are made to this
# configuration file.
version: 1.0

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: ReadoutPulse

# Flags for defining signal generator or signal analyzer functionality.
signal_generator: True

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
[Readout pulse delay]
datatype: DOUBLE
permission: WRITE
def_value: 0
unit: s
show_in_measurement_dlg: True

[Readout pulse length]
datatype: DOUBLE
permission: WRITE
def_value: 1.E-6
unit: s
show_in_measurement_dlg: True

[Number of points]
datatype: DOUBLE
permission: WRITE
def_value: 65536
low_lim: 2
high_lim: 65536
show_in_measurement_dlg: False

[Readout waveform]
datatype: VECTOR
permission: READ
x_name: point index
x_unit:
show_in_measurement_dlg: True
