# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows.
name: Signal Demodulation

# The version string should be updated whenever changes are made to this
# configuration file.
version: 1.1

# Name of folder containing the code defining a custom driver. Do not
# define this item or leave it blank for any standard driver based on
# the built-in VISA interface.
driver_path: SignalDemodulation

# Flags for defining signal generator or signal analyzer functionality.
signal_analyzer: True

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
[Modulation frequency]
datatype: DOUBLE
def_value: 100E6
unit: Hz
show_in_measurement_dlg: True

[Skip start]
datatype: DOUBLE
def_value: 0.0
unit: s
show_in_measurement_dlg: True

[Length]
datatype: DOUBLE
def_value: 1E-6
unit: s
show_in_measurement_dlg: True

[Number of segments]
datatype: DOUBLE
def_value: 1
show_in_measurement_dlg: True

[Use phase reference signal]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True

[Input data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
show_in_measurement_dlg: True

[Reference data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
show_in_measurement_dlg: True

[Time average]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True

[Value - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
x_name: Record index
x_unit:
show_in_measurement_dlg: True

[Value]
datatype: COMPLEX
permission: READ
unit: V
show_in_measurement_dlg: True

[Mod. frequency #1]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #2]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #3]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #4]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #5]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #6]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #7]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #8]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Mod. frequency #9]
datatype: DOUBLE
def_value: 0
unit: Hz
section: Multi Frequency
group: Multi Frequency

[Value #1]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #2]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #3]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #4]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #5]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #6]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #7]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #8]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #9]
datatype: COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #1 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #2 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #3 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #4 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #5 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #6 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #7 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #8 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency

[Value #9 - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
section: Multi Frequency
group: Multi Frequency
